OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  World Tour System Data Acquasition

  Code to acquire data

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = C:/Users/wldk5/WorldSystem/DataAcquisition/Data/Data-[$core{date}-$core{time}].ov
  Use compression = false
Data=#1, Stimulations=#0.Stimulations -> Signal display "Raw data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Stimulations -> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_07
  Action to perform = Stop
