OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  World Tour System Training Session

  Code to perform an training session.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Temporal filter "Bandpassfilter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation "Downsampling" => #4
  Decimation factor = 64
Data=#4, Stimulations=#0.Stimulations -> Signal display "Preprocessed data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
New input[0]=#4, New input[1]=#0.Stimulations -> TrainingSession
  Clock frequency (Hz) = 1
  Script = C:/Users/Ahn-Lab/Desktop/Sanghum/PyScript/WorldTraining.py
-> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_01
  Action to perform = Stop
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = C:/Users/Ahn-Lab/Desktop/Sanghum/Experiment/Data/0625 Experiment/Training/TrainingSession0625-[$core{date}-$core{time}].ov
  Use compression = false
