OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Signal Decimation "Downsampling" => #2
  Decimation factor = 4
New input[0]=#2, New input[1]=#0.Stimulations -> OnlineSession
  Clock frequency (Hz) = 1
  Script = D:/Sanghum/PyScript/WorldOnlineCNN.py
-> TCP Writer
  Port = 12240
  Output format = String
Input Signal=#0.Signal stream, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = D:/Sanghum/Experiment/Data/0831 Experiment/CNNRawOnlineSession-[$core{date}-$core{time}].ov
  Use compression = false
#0.Stimulations -> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_08
  Action to perform = Stop
