OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
0xc73e83ec Button VRPN Client => #1
  Peripheral name = button_test@localhost:50555
  Button 1 ON = OVTK_StimulationId_NonTarget
  Button 1 OFF = OVTK_StimulationId_Number_00
  Button 2 ON = OVTK_StimulationId_Target
  Button 2 OFF = OVTK_StimulationId_Number_00
  Button 3 ON = OVTK_StimulationId_ExperimentStop
  Button 3 OFF = OVTK_StimulationId_Number_00
Input stimulations 1=#1.Output 1, Input stimulations 2=#1.Output 2, Input stimulations 3=#1.Output 3 -> Stimulation multiplexer => #2
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/p300-train-[$core{date}-$core{time}].ov
  Use compression = false
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#0.Signal stream, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
