OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 3/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 32
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/Ahn-Lab/Desktop/xDAWN.cfg
Button VRPN Client => #5
  Peripheral name = button_test@localhost:50555
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_00
  Button 2 ON = OVTK_StimulationId_Number_01
  Button 2 OFF = OVTK_StimulationId_Number_00
  Button 3 ON = OVTK_StimulationId_Number_01
  Button 3 OFF = OVTK_StimulationId_Number_00
  Button 4 ON = OVTK_StimulationId_Number_01
  Button 4 OFF = OVTK_StimulationId_Number_00
Input signal=#4, Input stimulations=#5.Output 1 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = C:/Users/Ahn-Lab/Desktop/realp300/P300/OPENVIBE/scenario/p300-classifier.cfg
#9.Labels -> Stimulation listener "b1"
  Log level to use = Information
Input signal=#4, Input stimulations=#5.Output 2 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #13
Features=#13 -> Classifier processor => #14
  Filename to load configuration from = C:/Users/Ahn-Lab/Desktop/realp300/P300/OPENVIBE/scenario/p300-classifier.cfg
#14.Labels -> Stimulation listener "b2"
  Log level to use = Information
Input signal=#4, Input stimulations=#5.Output 3 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #18
Features=#18 -> Classifier processor => #19
  Filename to load configuration from = C:/Users/Ahn-Lab/Desktop/realp300/P300/OPENVIBE/scenario/p300-classifier.cfg
#19.Labels -> Stimulation listener "b3"
  Log level to use = Information
Input signal=#4, Input stimulations=#5.Output 4 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #23
Features=#23 -> Classifier processor => #24
  Filename to load configuration from = C:/Users/Ahn-Lab/Desktop/realp300/P300/OPENVIBE/scenario/p300-classifier.cfg
Classification result 0=#9.Labels, Classification result 1=#14.Labels, Classification result 2=#19.Labels, Classification result 3=#24.Labels -> Voting Classifier
  Number of repetitions = 2
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Number_00
  Result class label base = OVTK_StimulationId_Number_01
  Choose one if ex-aequo = true
-> Lua Stimulator => #26
  Lua Script = C:/Users/Ahn-Lab/Desktop/realp300/P300/OPENVIBE/scenario/Synchronizer.lua
  rp = 2
  delay = 2
-> Stimulation listener "r1"
  Log level to use = Information
Input 1=#26, Input 2=#26, Input 3=#26, Input 4=#26 -> Button VRPN Server
  Peripheral name = openvibe_vrpn_button@localhost
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_01
  Button 2 ON = OVTK_StimulationId_Number_02
  Button 2 OFF = OVTK_StimulationId_Number_02
  Button 3 ON = OVTK_StimulationId_Number_03
  Button 3 OFF = OVTK_StimulationId_Number_03
  Button 4 ON = OVTK_StimulationId_Number_04
  Button 4 OFF = OVTK_StimulationId_Number_04
#24.Labels -> Stimulation listener "b4"
  Log level to use = Information
