OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC TrialAll3 p300-train.ov
#0.Output stream 2 -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 32
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/xDAWN.cfg
#0.Output stream 3 -> Identity => #5
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "Target"
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch average => #7
  Averaging type = Epoch block average
  Epoch count = 15
-> Min/Max detection
  Min/Max = Max
  Time window start = 250
  Time window end = 500
-> Feature aggregator => #9
Input signal=#4, Input stimulations=#5 -> Stimulation based epoching "NonTarget"
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch average => #11
  Averaging type = Epoch block average
  Epoch count = 15
-> Min/Max detection
  Min/Max = Max
  Time window start = 250
  Time window end = 500
-> Feature aggregator => #13
ERP1=#7, ERP2=#11 -> ERP plot
  Filename final figure =
  Trigger to save figure = OVTK_StimulationId_ExperimentStop
  Line color 1 = 11,90,34
  Line label 1 = t
  Line color 2 = 97,5,5
  Line label 2 = n
Keyboard stimulator => #15
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Stimulations=#15, Features for class 1=#9, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Label_01
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
