OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial1 p300-train-[2018.08.03-12.14.50].ov
#0.Output stream 2 -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 16
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/xDAWN.cfg
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch average => #6
  Averaging type = Cumulative average
  Epoch count = 1
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = .5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch average => #8
  Averaging type = Cumulative average
  Epoch count = 3
ERP1=#6, ERP2=#8 -> ERP plot
  Filename final figure =
  Trigger to save figure = OVTK_StimulationId_ExperimentStop
  Line color 1 = 2,99,38
  Line label 1 = target
  Line color 2 = 92,2,32
  Line label 2 = nontarget
