OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial1 p300-train-[2018.08.03-12.14.50].ov
Generic stream reader => #1
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial2 p300-train-[2018.08.03-12.17.59].ov
Generic stream reader => #2
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial3 p300-train-[2018.08.03-12.20.36].ov
Generic stream reader => #3
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial4 p300-train-[2018.08.03-12.23.49].ov
Generic stream reader => #4
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial5 p300-train-[2018.08.03-12.26.28].ov
Input signal 1=#0.Output stream 2, Input stimulations 1=#0.Output stream 3, Input signal 2=#1.Output stream 2, Input stimulations 2=#1.Output stream 3, Input signal 3=#2.Output stream 2, Input stimulations 3=#2.Output stream 3, Input signal 4=#3.Output stream 2, Input stimulations 4=#3.Output stream 3, Input signal 5=#4.Output stream 2, Input stimulations 5=#4.Output stream 3 -> Signal Concatenation => #5
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 3 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 4 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 5 = OVTK_StimulationId_ExperimentStop
#5.Signal -> Channel Selector "1:32" => #6
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
Input Signal=#6, Input Stimulations=#5.Stimulations -> Generic stream writer
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC TrialAll p300-train.ov
  Use compression = false
