OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/SWC Trial5 p300-train-[2018.08.03-12.26.28].ov
#0.Output stream 2 -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 16
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#4, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target" => #5
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#4, Evoked potential epochs=#5 -> xDAWN Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/Ahn-Lab/Desktop/OpenVibe process algorithm/data/xDAWN.cfg
  Filter dimension = 4
  Save as box config = true
