OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  Resting State Eye Open

  Code to acquire eye opened data

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
Input Signal=#1 -> Generic stream writer "Rawdata Acquisition"
  Filename = C:/Users/wldk5/WorldSystem/RestingState/EyeOpen-[$core{date}-$core{time}].ov
  Use compression = false
Data=#1 -> Signal display "Raw data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Clock stimulator
  Interstimulation interval (in sec) = 60.0
  Stimulation = OVTK_StimulationId_Number_00
-> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_00
  Action to perform = Stop
